OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x8c1fc55b = 1.0
0x9f5c4075 = Network acquisition example
0xf36a1567 = http://openvibe.inria.fr/tutorial-the-most-basic-openvibe-setup/
0xf6b2e3fa = box-tutorials
0xf8034a49 = Inria
Comment
  The Acquisition Client box
  receives data from the OpenViBE acquisition
  server. You should have the OpenViBE
  acquisition server started and acquiring to
  let this scenario work correctly. In case
  of connection errors, you should read a
  message in the console.
Comment
  The Signal Display box display the
  acquired data.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

CSV File Reader => #0
  Filename = /home/nastaran/Documents/Projects/git-projects/experiment/created_files/eeg/P2-[2019.10.16-14.22.46].csv
Data=#0.Output stream, Stimulations=#0.Output stimulation -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Signal=#0.Output stream, Stimulations=#0.Output stimulation -> EDF File Writer
  Filename = /home/nastaran/Documents/Projects/git-projects/experiment/created_files/eeg/P2-[2019.10.16-14.22.46].edf
