OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x8c1fc55b = 1.0
0x9f5c4075 = Network acquisition example
0xf36a1567 = http://openvibe.inria.fr/tutorial-the-most-basic-openvibe-setup/
0xf6b2e3fa = box-tutorials
0xf8034a49 = Inria
Comment
  The Acquisition Client box
  receives data from the OpenViBE acquisition
  server. You should have the OpenViBE
  acquisition server started and acquiring to
  let this scenario work correctly. In case
  of connection errors, you should read a
  message in the console.
Comment
  The Signal Display box display the
  acquired data.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal Filter => #1
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = .1
  High Cut-off Frequency (Hz) = 50
  Band Pass Ripple (dB) = 0.5
Data=#1, Stimulations=#0.Stimulations, Channel Units=#0.Channel units -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 5
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = true
Input stream=#0.Signal stream, Stimulations stream=#0.Stimulations -> CSV File Writer
  Filename = /home/nastaran/Documents/Projects/git-projects/experiment2/created_files/eeg/csv/P-4-[$core{date}-$core{time}].csv
  Precision = 10
  Append data = false
  Only last matrix = false
Experiment information=#0.Experiment information, Signal=#0.Signal stream, Stimulations=#0.Stimulations -> EDF File Writer
  Filename = /home/nastaran/Documents/Projects/git-projects/experiment2/created_files/eeg/csv/P-4-[$core{date}-$core{time}].csv
